CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:Ch1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:Ch2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3")
    Name to assign these images:Ch3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Ch1
    Name the output image:Ch1Rescaled
    Rescaling method:Divide by the image's maximum
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
RescaleIntensity:[module_num:6|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
    Select the input image:Ch2
    Name the output image:Ch2Rescaled
    Rescaling method:Divide by the image's maximum
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
Threshold:[module_num:7|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
    Select the input image:Ch1Rescaled
    Name the output image:Ch1Threshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.13
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Ch1Threshold
    Name the primary objects to be identified:allmacro
    Typical diameter of objects, in pixel units (Min,Max):8,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:50
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.08
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
EditObjectsManually:[module_num:9|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
    Select the objects to be edited:allmacro
    Name the edited objects:EditedMacro
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Ch1
    Allow overlapping objects?:No

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Ch1Rescaled
    Name the output image:allmacros
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:EditedMacro

ConvertObjectsToImage:[module_num:11|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
    Select the input objects:EditedMacro
    Name the output image:AllMacros
    Select the color format:Grayscale
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:AllMacros
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ch1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:allmacro
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Veronika 102021 stat6\\export
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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